PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Orientation_discrimination
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10,10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    GratingComponent grating
      contrast = 0.3
      mask = gauss
      ori [set every repeat] = tilt
      saveStartStop = False
      sf = 5
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'up','down'
      correctAns = $cor_Ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if random() > 0.5:
            tilt = 0;
            cor_Ans = 'up'
        else:

            if random() > 0.5:
                tilt = randint(1,5)
                cor_Ans = 'down'
            else:
                tilt = randint(-5,-1)
                cor_Ans = 'down'
      End Routine:
        trials.addData('tilt',tilt)

        if random() > 0.5:
            tilt = 0;
            cor_Ans = 'up'
        else:

            if random() > 0.5:
                tilt = randint(1,5)
                cor_Ans = 'down'
            else:
                tilt = randint(-5,-1)
                cor_Ans = 'down'
  Routine Inst
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        A gradient will appear on the screen, you have to judge the orientation of the tilt. If there is no tilt press the up arrow key. If there is tilt press the down arrow key.

        If you have understood the instructions continue to the experiment by pressing space.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank you
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Flow
  Routine Inst
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine trial
  LoopTerminator trials
  Routine end
